PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sound
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Routines
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $fre
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 1.5
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 1.5
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      text:
        Press 1 if you heard LL.
        Press 2 if you heard LR.
  Routine L
    SoundComponent low
      sound = 1000
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    SoundComponent sound_6
      sound [set every repeat] = $fre
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    KeyboardComponent key_resp_9
      allowedKeys = 'Enter'
      forceEndRoutine = False
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 1.6
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    TextComponent text_11
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text = +
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  Routine routine_1
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.0
      text = End
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  Routine routine
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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      text [set every repeat]:
        $count
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
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  Routine routine_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = End of the experiment, thank you!
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  Routine instruc2
    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Here is an example of low frequency tone.
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    SoundComponent sound_7
      sound = 1000
      startVal [time (s)] = 2
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 3
      text = Here is an example of high frequency tone.
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    SoundComponent sound_2
      sound = 1300
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_9
      letterHeight = 0.1
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = 1
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  Routine instruc4
    SoundComponent sound_3
      sound = 1000
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_6
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text = +
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    SoundComponent sound_4
      sound [set every repeat] = 1300
      startVal [time (s)] = 0.9
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 2
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      text:
        Two tones are different.

        Don't press any key!
    SoundComponent sound_5
      sound = 1000
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_13
      letterHeight = 0.2
      startVal [time (s)] = 3.5
      stopVal [duration (s)] = 1.0
      text = +
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    SoundComponent sound_8
      sound = 1000
      startVal [time (s)] = 4.4
      stopVal [duration (s)] = 0.1
      volume = 0.75
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
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      text:
        Two tones are the same!

        Press SPACE this time!
  Routine instruc3
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice session

        Press any key to start
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruc5
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Experiment session:

        When you are ready,
        Press any key to start!
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine instruc1
    TextComponent instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Instruction:

        In the experiment, you will hear two tones in sequence.

        If the two tones have the same pitch,
        use your right hand to press the SPACE bar.

        If the two tones have different pitches,
        no action needed.

        When you are ready,
        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruc1
  Routine instruc2
  Routine instruc3
  Routine instruc4
  Routine instruc5
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = loopcount.xlsx
    loopType = sequential
    nReps = 1.5
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    conditions:
      [OrderedDict([('count', 1)]),
      OrderedDict([('count', 2)])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = frequency.xlsx
      loopType = fullRandom
      nReps = 4
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      conditions:
        [OrderedDict([('fre', 1000)]),
        OrderedDict([('fre', 1300)])]
      Routine L
    LoopTerminator trials
    Routine routine
  LoopTerminator trials_2
